CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Myotubes (?P<Treatment>.*) (?P<Well>[A-P][0-9]{1}) [0-9]{2}\.nd2
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:AO
    Channel number:2
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    Image name:PI
    Channel number:3
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    Image name:TD

ImageMath:[module_num:6|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AO_plus_PI
    Image or measurement?:Image
    Select the first image:AO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:PI
    Multiply the second image by:1.0
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
Smooth:[module_num:7|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
    Select the input image:AO
    Name the output image:SmoothAO
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Find non-myotube nuclei in AO channel']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
    Select the input image:SmoothAO
    Name the primary objects to be identified:AONuclei_nonMT
    Typical diameter of objects, in pixel units (Min,Max):12,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Minimum Cross-Entropy

EnhanceOrSuppressFeatures:[module_num:9|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enabled:False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
    Select the input image:AO
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Detect nuclei mainly in myotubes']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
    Select the input image:SmoothAO
    Name the primary objects to be identified:AONuclei_MT
    Typical diameter of objects, in pixel units (Min,Max):12,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
CombineObjects:[module_num:11|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notes:['Combine all the nuclei detected in the AO channel']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
    Select initial object set:AONuclei_MT
    Select object set to combine:AONuclei_nonMT
    Select how to handle overlapping objects:Merge
    Name the combined object set:AONuclei

IdentifyPrimaryObjects:[module_num:12|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notes:['Identify PI-positive nuclei']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
    Select the input image:PI
    Name the primary objects to be identified:PINuclei
    Typical diameter of objects, in pixel units (Min,Max):12,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
CombineObjects:[module_num:13|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notes:['Combine PI and AO nuclei']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
    Select initial object set:AONuclei
    Select object set to combine:PINuclei
    Select how to handle overlapping objects:Merge
    Name the combined object set:Nuclei

MeasureObjectIntensity:[module_num:14|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notes:['']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
    Select images to measure:AO, PI
    Select objects to measure:Nuclei

FilterObjects:[module_num:15|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notes:['Optional filter to create a definition for dead cells, or strongly AO-positive cells']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enabled:False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
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
CalculateMath:[module_num:16|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notes:['Optional calculation of intensity ratios or cell number ratios']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enabled:False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
    Name the output measurement:AO_PI_Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_AO
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_PI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
GrayToColor:[module_num:17|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notes:['Create an AO-PI overlay']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:PI
    Select the image to be colored green:AO
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    Name the output image:PI_AO
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PI_AO
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFFFF
    Select objects to display:Nuclei

SaveImages:[module_num:19|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notes:['Save an image of the detected nuclei on the original AO and PI image']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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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