CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:Green

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DAPI
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DAPI
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:8|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
    Select the input image:Green
    Name the output image:CorrGreen
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DAPI
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
GrayToColor:[module_num:10|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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored green:Green
    Select the image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:CellOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cells

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:CorrGreen
    Select objects to measure:Cells

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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