CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "A2") (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Series": "integer", "Frame": "integer", "ChannelNumber": "integer", "Well": "text", "FileLocation": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-H][0-9])_.{2}_(?P<ChannelNumber>[0-9]).*\.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'Well', u'Green': u'Well'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
GrayToColor:[module_num:6|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enabled:False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
    Select a color scheme:RGB
    Select the image to be colored red:DAPI
    Select the image to be colored green:DAPI
    Select the image to be colored blue:DAPI
    Name the output image:DAPI_RGB
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:7|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notes:['overlay nuclei on DAPI image with 80% opacity']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:DAPI_outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FEFE0A
    Select objects to display:Nuclei

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:DAPI_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:Green
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_02Metadata,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_05IdentifyPrimaryObjects,Image|FileName_DAPI,Image|FileName_Green,Image|Metadata_FileLocation,Image|Metadata_Well,Image|Metadata_ChannelNumber,Experiment|Modification_Timestamp,Experiment|Run_Timestamp,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,Nuclei|Intensity_MassDisplacement_Green,Nuclei|Intensity_MinIntensity_Green,Nuclei|Intensity_IntegratedIntensityEdge_Green,Nuclei|Intensity_StdIntensity_Green,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BoLi_run02_
    Overwrite existing files without warning?:No
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