CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Preliminary project by TCS for Kate Kaiser, Arpaia lab, 2019.', '', 'Channels: 1: DAPI, 2: cytoplasmic stain of interest, 3: nuclear proliferation marker (Ki67)', 'Goals:', '-- intensity of Ch2', '-- % of cells positive for Ch3', '-- shape of cells as shown by Ch2 (there may be a correlation between shape and intensity). We see round/bright cells and irregular, faint ones. Some cells are broken during the coverslipping procedure.', '', 'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split channels']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
    Select the input image:original
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:Channel2
    Channel number:3
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    Image name:Ki67
