CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['TCS for Kate Kaiser, Arpaia lab, 2019. Goal: determine number of cells doule labeled in channels 3 and 4']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['split channels']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
    Select the input image:original
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:Green
    Channel number:3
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    Image name:Red
    Channel number:4
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    Image name:White

IdentifyPrimaryObjects:[module_num:6|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notes:['Find cells based on DAPI']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Red cells']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
    Select the input image:Red
    Name the primary objects to be identified:RedCells
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:8|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notes:['White Cells']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
    Select the input image:White
    Name the primary objects to be identified:WhiteCells
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:4
    Lower and upper bounds on threshold:0.0,1.0
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