CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop input files or folders here and click Apply filters to the file list', 'Suggest dragging files not folders']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This step captures the experiment name and well number from each image.', '***On each run, click Update to verify that the experiment and well # are identified correctly.***']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\//](?P<Experiment>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-H][0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This step organizes the different channel images from each field.', '***On each run, click Update to verify the images are identified correctly.***']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Red")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['This pipeline has no groups.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei from the DAPI channel. Lower bound and correction are used to compensate for overstaining of DAPI in cytoplasm and extremely bright nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.4
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify cells using phalloidin (red) channel']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Red
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Identify cytoplasm by subtracting the nucleus from the cell']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ExpandOrShrinkObjects:[module_num:8|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notes:['Create a nuclear ring, step 1: Shrink the detected nuclei']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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:No
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
ExpandOrShrinkObjects:[module_num:9|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notes:['Create a nuclear ring, step 2: Expand the detected nuclei']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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
IdentifyTertiaryObjects:[module_num:10|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notes:['Create a nuclear ring, step 3: Subtract the shrunken area from the original area']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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:NuclearRings
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:11|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notes:['Measure intensity of target (green) channel in each object type']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
    Select images to measure:Green
    Select objects to measure:Cells, Cytoplasm, ExpandedNuclei, NuclearRings, Nuclei, ShrunkenNuclei

ExportToSpreadsheet:[module_num:12|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notes:['Export results']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:13|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notes:['Create an overlay image on the green channel, without rescaling the intensity']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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:Red
    Select the image to be colored green:Green
    Select the image to be colored blue:DAPI
    Name the output image:Overlay
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:14|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notes:['Overlay the cell and nuclei outlines on the overlay image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Overlay
    Name the output image:OverlayOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:Cells
    Select outline color:#FB02FF
    Select objects to display:NuclearRings

SaveImages:[module_num:15|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notes:['Save the overlay image for evaluating the detection of cells', '*** The base image folder at the bottom should be the folder containing the INPUT images!', 'It will be used to reproduce the folder structure in the output folder.']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
    Select the type of image to save:Image
    Select the image to save:OverlayOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder|/Users/theresaswayne/Desktop/Mikko Turunen
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    Save with lossless compression?:Yes
