CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Input is Thunder Imager processed images from a LIF, converted to TIF']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The treatment group is extracted from the file name (208a or Insulin)']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^[0-9]{8}_(?P<Group>.{4})_(?P<SeriesName>.*)\.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the channels']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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:IR
    Channel number:2
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    Image name:DAPI
    Channel number:3
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    Image name:Membrane

Threshold:[module_num:6|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notes:['Set a high threshold to identify RBCs which contribute to background']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
    Select the input image:IR
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:2.2
    Lower and upper bounds on threshold:0.011,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskImage:[module_num:7|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notes:['Mask both GFP and red channels to remove RBCs']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
    Select the input image:IR
    Name the output image:MaskIR
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdGFP
    Invert the mask?:Yes

MaskImage:[module_num:8|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notes:['Mask both GFP and red channels to remove RBCs']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
    Select the input image:Membrane
    Name the output image:MaskMembrane
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdGFP
    Invert the mask?:Yes

MeasureColocalization:[module_num:9|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notes:['Correlation = Pearson’s correlation. Underestimates co-occurrence if it exists without correlation. Sensitive to noise. ', '', 'Costes 1 to 3 and 3 to 1. These are Manders overlap coefficients with thresholds selected using the Costes method. IJ documentation: "When the PCC value for the sub-threshold pixels nears zero, an assumption is made that a suitable segmentation of signal from background has been made. However, care must be taken when using Costes’ threshold regression. If the signal of interest is not well correlated compared to the background, there will not be a clear demarcation in the PCC values between the two."', '', 'Manders coefficients are co-occurrence fractions (taking into account intensity). Less sensitive to background and blur than the area overlap method, and less sensitive to noise than Pearson, but sensitive to bright artifacts. ', '', 'Overlap, K 1 to 3, and K 3 to 1.  JaCoP docs describe k1 and k2 as part of the Overlap Coefficient (https://imagej.net/plugins/jacop and https://doi.org/10.1111/j.1365-2818.2006.01706.x) These are the MOC (Manders’ Overlap Coefficient) values which are equivalent to the Pearson calculation without subtracting the mean value.  K’s are the values calculated for each channel per equations in Bolte & Cordelieres. Their usefulness is disputed by J Adler. Sensitive to background. Note that these are not the same as M1 and M2. ', '', 'Manders 1 to 3 and 3 to 1. These are the M1 and M2 coefficients based on overlap and intensity, sensitive to background, less sensitive to noise vs PCC. The threshold is set at 0. "1 to 3" is the amount of channel 1 colocalized with channel 3. ', '', 'RWC 1 to 3 and 3 to 1. This is a rank-weighted correlation (https://bmcbioinformatics.biomedcentral.com/articles/10.1186/1471-2105-12-407#Sec2 ) that takes into account both correlation and intensities. "Rank-based weighting addresses the critical issues of difference in channel illumination, dual channel directional illumination, and uniform noise and gradient correlation, as the ranks are preserved even though the actual intensities might suffer degradation in all of these cases." (Li is also a rank based method in Coloc2)', '', ' ', '', '', '', ' ', '', 'Cimini "That being said, I think this site 66 offers a good definition of the different correlation measurements- in general, Overlap is how "overall similar Im1 and Im2 are to each other", whereas the different K measurments are "How similar Im1 is to Im2" and "How similar is Im2 to Im1". https://forum.image.sc/t/colocalization-output-correlation-k-versus-correlation-overlap/13126  ']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
    Select images to measure:MaskIR, MaskMembrane
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Fast

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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