CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:origBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:origGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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notes:['Detect the well area in the blue image']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
    Select the input image:origBlue
    Name the output image:ThresholdBlue
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:6|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notes:['Mask the blue image to exclude the area outside the well']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
    Select the input image:origBlue
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdBlue
    Invert the mask?:No

Smooth:[module_num:7|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notes:['Smooth the blue image to enable detection of colonies']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
    Select the input image:MaskBlue
    Name the output image:MedianBlue
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Method 1: Identify colonies in smoothed blue channel']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
    Select the input image:MedianBlue
    Name the primary objects to be identified:BluePatches
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5
    Threshold correction factor:1.05
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:200
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    Thresholding method:Minimum Cross-Entropy

OverlayOutlines:[module_num:9|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notes:['Overlay blue colony outlines on the blue image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:origBlue
    Name the output image:BlueColonyOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0000
    Select objects to display:BluePatches

SaveImages:[module_num:10|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notes:['Save the blue colony overlay image']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
    Select the type of image to save:Image
    Select the image to save:BlueColonyOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:origBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_patches
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Threshold:[module_num:11|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notes:['Detect the well area in the green image']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
    Select the input image:origGreen
    Name the output image:ThresholdGreen
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:12|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notes:['Mask the green image to exclude the area outside the well']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
    Select the input image:origGreen
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdGreen
    Invert the mask?:No

Smooth:[module_num:13|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notes:['Smooth the green image to enable detection of colonies']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
    Select the input image:MaskGreen
    Name the output image:MedianGreen
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Method 2: Identify colonies in smoothed green channel']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
    Select the input image:MedianGreen
    Name the primary objects to be identified:GreenPatches
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:15|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notes:['Overlay green colony outlines on the green image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:origGreen
    Name the output image:GreenColonyOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB0207
    Select objects to display:GreenPatches

SaveImages:[module_num:16|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notes:['Save the green colony overlay image']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
    Select the type of image to save:Image
    Select the image to save:GreenColonyOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:origGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_patches
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:17|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notes:['Method 3: Identify total cells from green channel']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
    Select the input image:MaskGreen
    Name the primary objects to be identified:GreenCells
    Typical diameter of objects, in pixel units (Min,Max):4,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectNeighbors:[module_num:18|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notes:['Detect clusters by counting neighbors of the green cells']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
    Select objects to measure:GreenCells
    Select neighboring objects to measure:GreenCells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:BrBG
    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:19|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notes:['Keep only the green cells that are in clusters']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
    Select the objects to filter:GreenCells
    Name the output objects:GreenCellClusters
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_20
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:20|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notes:['Convert the cluster cells to an image']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
    Select the input objects:GreenCellClusters
    Name the output image:ClusterImage
    Select the color format:Binary (black & white)
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
Closing:[module_num:21|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notes:['Close up the gaps between adjacent green cells in clusters']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
    Select the input image:ClusterImage
    Name the output image:ClosedCluster
    Structuring element:disk,8

IdentifyPrimaryObjects:[module_num:22|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notes:['Identify clusters and split them by shape']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
    Select the input image:ClosedCluster
    Name the primary objects to be identified:Clusters
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:23|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notes:['Overlay the cell clusters on the green image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:origGreen
    Name the output image:GreenClusterOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB0207
    Select objects to display:GreenCellClusters

SaveImages:[module_num:24|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notes:['Save the green cluster overlay image']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
    Select the type of image to save:Image
    Select the image to save:GreenClusterOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:origGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_clusters
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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notes:['Export data']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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