CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Name format: Image_XY03_00009_CH1.tif', 'Exclude overlays']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot containregexp "Overlay")

Metadata:[module_num:2|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notes:['The channel will be identified here.', 'CH1 = DAPI', 'CH2 = Green (5HT)', 'CH3 = Red (GLP1)', '', 'previously the regex was (?P<Channel>[A-Za-z]*)\\.tif']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_CH(?P<Channel>[\d]*)\.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Names the images according to the channel']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify red cells (GLP1). Allow larger size and don’t split — to allow for extended morphology']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
    Select the input image:Red
    Name the primary objects to be identified:RedCells
    Typical diameter of objects, in pixel units (Min,Max):4,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify green cells (5HT)']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
    Select the input image:Green
    Name the primary objects to be identified:GreenCells
    Typical diameter of objects, in pixel units (Min,Max):4,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:8|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notes:['Measure intensity of red channel in Red Cells']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
    Select images to measure:Red
    Select objects to measure:RedCells

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity of green channel in Green Cells']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
    Select images to measure:Green
    Select objects to measure:GreenCells

ExportToSpreadsheet:[module_num:10|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notes:['If desired, add the date in the filename prefix ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Yunkyoung Lee images/Total vs red cells/10x vs 20x/20x results pipeline 2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:test_
    Overwrite existing files without warning?:No
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
RescaleIntensity:[module_num:11|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notes:['Enhance contrast of blue image for export']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
    Select the input image:DAPI
    Name the output image:DAPI_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:12|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notes:['Enhance contrast of red channel for export']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
    Select the input image:Red
    Name the output image:Red_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:13|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notes:['Enhance contrast of green channel for export']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
    Select the input image:Green
    Name the output image:Green_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:14|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notes:['colorize and merge the contrast-enhanced images']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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:Red_RescaleIntensity
    Select the image to be colored green:Green_RescaleIntensity
    Select the image to be colored blue:DAPI_RescaleIntensity
    Name the output image:Merge_RescaleIntensity
    Relative weight for the red image:1
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:15|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notes:['For reference, overlay outlines of red and green cells on contrast-enhanced, merged image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge_RescaleIntensity
    Name the output image:MergeOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FEFE0A
    Select objects to display:RedCells
    Select outline color:#00FCF1
    Select objects to display:GreenCells

SaveImages:[module_num:16|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notes:['Save image showing the identified red and green cells. If desired, add a date stamp to the “text to append”']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
    Select the type of image to save:Image
    Select the image to save:MergeOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/Yunkyoung Lee images/Total vs red cells/10x vs 20x/20x results pipeline 2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:17|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notes:['For reference, overlay outlines of all nuclei on contrast-enhanced, merged image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge_RescaleIntensity
    Name the output image:MergeOutlinesNuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FEFE0A
    Select objects to display:Nuclei

SaveImages:[module_num:18|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notes:['Save image showing the identified nuclei. If desired, add a date stamp to the “text to append”']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
    Select the type of image to save:Image
    Select the image to save:MergeOutlinesNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/Yunkyoung Lee images/Total vs red cells/10x vs 20x/20x results pipeline 2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:19|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notes:['Construct an image showing the intensity of objects (as a heatmap, yellow = high, red = low) overlaid on a grayscale version of the Red channel']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
    Display object or image measurements?:Object
    Select the input objects:RedCells
    Measurement to display:Intensity_MeanIntensity_Red
    Select the image on which to display the measurements:Red_RescaleIntensity
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    Name the output image that has the measurements displayed:DisplayImage_RedIntensity
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    Image elements to save:Image
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    Display mode:Color
    Color map:autumn
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

SaveImages:[module_num:20|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notes:['Save image of heat map of measured intensities']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_RedIntensity
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_R_heatmap
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/Yunkyoung Lee images/Total vs red cells/10x vs 20x/20x results pipeline 2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:21|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
    Display object or image measurements?:Object
    Select the input objects:GreenCells
    Measurement to display:Intensity_MeanIntensity_Green
    Select the image on which to display the measurements:Green_RescaleIntensity
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    Name the output image that has the measurements displayed:DisplayImage_GreenIntensity
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    Image elements to save:Image
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    Display mode:Color
    Color map:autumn
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_GreenIntensity
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_G_heatmap
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/Yunkyoung Lee images/Total vs red cells/10x vs 20x/20x results pipeline 2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayHistogram:[module_num:23|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notes:['Log-log histogram of Red cell intensities']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
    Select the object whose measurements will be displayed:RedCells
    Select the object measurement to plot:Intensity_MeanIntensity_Red
    Number of bins:100
    How should the X-axis be scaled?:log
    How should the Y-axis be scaled?:log
    Enter a title for the plot, if desired:Red cell mean intensity
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayDataOnImage:[module_num:24|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notes:['Display cell number']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:RedCells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Merge_RescaleIntensity
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_RedCellNumber
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:25|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notes:['Save the image with red cell numbers']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_RedCellNumber
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_redcells
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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