CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Note: Images should be renamed with NameChanger (Mac) or similar) so that:', '\\t— each DAPI image name ends with -dapi.tif', '\\t— each red image name ends with -red.tif', ' ']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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notes:['If images have been correctly renamed, the channel name will be identified here.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:\)-(?P<Channel>[a-z]*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Names the images according to the channel']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "dapi")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "red")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei. ', 'For 10x, diameter settings are 6-25, threshold smoothing scale 1.1, size of smoothing filter 2', 'for 20x, diam. 10-30 , thresh. smoothing 1.1,   size of smoothing filter 2.5']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:6|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notes:['Expand each nucleus outward 3 pixels for 10x to represent cytoplasm. Note: if objects are touching, they will not be expanded.', 'For 20x use a value of ——']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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MeasureObjectIntensity:[module_num:7|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notes:['Measure intensity of red channel in expanded nuclei']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
    Hidden:1
    Select an image to measure:Red
    Select objects to measure:ExpandedNuclei

ExportToSpreadsheet:[module_num:8|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notes:['If desired, add the date in the filename prefix ']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/Yunkyoung Lee images/Total vs red cells/full results slide #1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:ExpandedNuclei|Intensity_MinIntensity_Red,ExpandedNuclei|Intensity_StdIntensity_Red,ExpandedNuclei|Intensity_IntegratedIntensity_Red,ExpandedNuclei|Intensity_MADIntensity_Red,ExpandedNuclei|Intensity_MeanIntensity_Red,ExpandedNuclei|Intensity_UpperQuartileIntensity_Red,ExpandedNuclei|Intensity_MaxIntensity_Red,ExpandedNuclei|Intensity_MedianIntensity_Red,ExpandedNuclei|Location_Center_Y,ExpandedNuclei|Location_Center_X,ExpandedNuclei|Number_Object_Number,Image|Count_ExpandedNuclei,Image|Count_Nuclei,Nuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20190620_full10x_
    Overwrite existing files without warning?:No
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
RescaleIntensity:[module_num:9|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notes:['Enhance contrast of blue image for export']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
    Select the input image:DAPI
    Name the output image:DAPI_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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notes:['Enhance contrast of red channel for export']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
    Select the input image:Red
    Name the output image:Red_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:11|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notes:['colorize and merge the contrast-enhanced images']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
    Select a color scheme:RGB
    Select the image to be colored red:Red_RescaleIntensity
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    Select the image to be colored blue:DAPI_RescaleIntensity
    Name the output image:Merge_RescaleIntensity
    Relative weight for the red image:1
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:12|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notes:['For reference, overlay expanded outlines (measured cell areas) on contrast-enhanced, merged image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge_RescaleIntensity
    Name the output image:MergeOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FEFE0A
    Select objects to display:ExpandedNuclei

SaveImages:[module_num:13|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notes:['Save image showing the identified cells. If desired, add a date stamp to the “text to append”']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MergeOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells_full10x_20190620
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/Yunkyoung Lee images/Total vs red cells/full results slide #1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayHistogram:[module_num:14|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notes:['Log-log histogram of Red cell intensities']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
    Select the object whose measurements will be displayed:ExpandedNuclei
    Select the object measurement to plot:Intensity_MeanIntensity_Red
    Number of bins:100
    How should the X-axis be scaled?:log
    How should the Y-axis be scaled?:log
    Enter a title for the plot, if desired:Expanded nuclei mean intensity
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:ExpandedNuclei
    Measurement to display:Intensity_MeanIntensity_Red
    Select the image on which to display the measurements:Red_RescaleIntensity
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    Name the output image that has the measurements displayed:DisplayImage_RedIntensity
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    Image elements to save:Image
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    Display mode:Color
    Color map:autumn
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

SaveImages:[module_num:16|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notes:['Save image of heat map of measured intensities']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_RedIntensity
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_heatmap_full10x_20190620
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/Yunkyoung Lee images/Total vs red cells/full results slide #1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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