CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Type>template)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the color image by matching files in the folder against the text ‘6-1.jpg’. Load the template image as a binary mask. See details on the pipeline protocol at http://www.cellprofiler.org/linked_files/Papers/31-Vokes_CurrentProtocols_2008.pdf.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'Orig': 'Well', 'WellTemplate': None}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata doesnot Type "template")
    Name to assign these images:Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Type "template")
    Name to assign these images:WellTemplate
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Correct for uneven illumination by creating an illumination correction function. Since most of the image is background, we use the ‘Background’ method here. The idea is to smooth the function enough so that it reflects the uneven intensity variation.']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enabled:False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
    Select the input image:Orig
    Name the output image:Illum
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Apply the illumination function previously created to correct the original image. ']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enabled:False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
    Select the input image:Orig
    Name the output image:Corr
    Select the illumination function:Illum
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Align:[module_num:7|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notes:['Align the plate image to the binary Plate Template. This step accounts for experimental variation in the plate placement. The Combined Image is also aligned by the same offset.']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
    Select the alignment method:Mutual Information
    Crop mode:Pad images
    Select the first input image:Orig
    Name the first output image:AlignedCorr
    Select the second input image:WellTemplate
    Name the second output image:AlignedTemplate

MaskImage:[module_num:8|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notes:['Mask the Combined Image to the region of interest defined by the Plate Template.']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
    Select the input image:AlignedCorr
    Name the output image:MaskedCorr
    Use objects or an image as a mask?:Image
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    Select image for mask:AlignedTemplate
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify all yeast colonies (white and red) within the plate. Use the red channel image, since both red and white colonies are bright in this image. Adjust the min/max diameter depending on the expected colony size in your own images.']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
    Select the input image:MaskedCorr
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:10|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notes:['Overlay the colony outlines upon the MaskedRedPlate image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskedCorr
    Name the output image:OutlinedNuclei
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Nuclei

SaveImages:[module_num:11|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notes:['Save the outline overlay image as an 8-bit TIF, using the same name as the original image, plus ‘_outlines’ as a suffix. Save the image to the default output folder.']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
    Select the type of image to save:Image
    Select the image to save:OutlinedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:12|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the colony objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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