CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:LipidTox
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei from DAPI']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify cytoplasm from Cy5']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:LipidTox
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify small lipid droplets']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
    Select the input image:LipidTox
    Name the primary objects to be identified:SmallLDs
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify large lipid droplets']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
    Select the input image:LipidTox
    Name the primary objects to be identified:LargeLDs
    Typical diameter of objects, in pixel units (Min,Max):16,80
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:9|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notes:['Associate Large LDs with cells']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
    Parent objects:Cells
    Child objects:LargeLDs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:10|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notes:['Associate small LDs with cells']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
    Parent objects:Cells
    Child objects:SmallLDs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:LipidTox
    Select objects to measure:LargeLDs, SmallLDs

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LipidTox
    Name the output image:LDsOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:SmallLDs
    Select outline color:#80FF80
    Select objects to display:LargeLDs

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:LDsOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:LipidTox
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
