CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Project by Theresa Swayne for Takamasa Ito, 2022', 'Purpose: Count the number and percentage of cells of interest in follicles and inter-follicular areas of lymph node images. The cells of interest are red-positive and far-red negative.', 'Input: Spinning-disk confocal images of lymph node sections stained for DAPI, green, red, and far-red. *** User selects follicle areas during the run.***. Follicles are best identified on stitched images.', 'Output: ', '—Spreadsheets: Total cells inside and outside follicles. Total cells of interest inside and outside follicles. Intensity of far-red within red cells.', '—Images: outlines of follicles, nuclei, red cells']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Name the original image']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['For tiles: Remove overlap area based on 20% overlap, 1250x1760 pixels (limitation: will also remove outermost area on all sides)']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enabled:False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
    Select the input image:orig
    Name the output image:CropOrig
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:125,-125
    Top and bottom rectangle positions:176,-176
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    Remove empty rows and columns?:Edges
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
ColorToGray:[module_num:6|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notes:['Split the original image into channels, assumed to be in order: DAPI, Green, Red, Far-Red. Cells of interest are Red+ and Far-Red negative.']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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:Green
    Channel number:3
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    Image name:Red
    Channel number:4
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    Image name:FarRed

GrayToColor:[module_num:7|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notes:['Create a color image to help wilth follicle identification. Only nuclei and the green channel are visible — the cells of interest do not appear on this image.']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:FollicleID
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    Hidden:2
    Image name:DAPI
    Color:#00FFFF
    Weight:1.0
    Image name:Green
    Color:#00ff00
    Weight:1.0

IdentifyObjectsManually:[module_num:8|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notes:['User outlines follicle areas on the color image from the previous step. User is blind to the red and far-red staining at this point.']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enabled:False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
    Select the input image:FollicleID
    Name the objects to be identified:Follicles

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify nuclei', '']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:10|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notes:['Identify candidate red cells (all nuclei serve as seeds)']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
    Select the input objects:Nuclei
    Name the objects to be identified:RedCandidates
    Select the method to identify the secondary objects:Propagation
    Select the input image:Red
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:11|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notes:['Measure candidate red cells in the red and far-red channels']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
    Select images to measure:FarRed, Red
    Select objects to measure:RedCandidates

FilterObjects:[module_num:12|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notes:['Select red cells above a certain criterion']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
    Select the objects to filter:RedCandidates
    Name the output objects:RedCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Red
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:No
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
GrayToColor:[module_num:13|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:RedRescaled
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    Hidden:1
    Image name:Red
    Color:#FB0207
    Weight:1.0

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RedRescaled
    Name the output image:OutlineRed
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FFFF0A
    Select objects to display:RedCells

Threshold:[module_num:15|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notes:['Threshold on the far-red channel to identify areas that are positive. A lower bound helps prevent spurious threhsolds in images with no positive cells.']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enabled:False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
    Select the input image:FarRed
    Name the output image:ThresholdFarRed
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:16|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notes:['Convert the thresholded far-red image to objects']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enabled:False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
    Select the input image:ThresholdFarRed
    Name the output object:ObjectsFarRed
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:17|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notes:['Measure FarRed objects preparatory to filtering by size']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enabled:False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
    Select object sets to measure:ObjectsFarRed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:18|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notes:['Remove objects too small to be cells']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enabled:False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
    Select the objects to filter:ObjectsFarRed
    Name the output objects:FarRedCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:19|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notes:['Measure the filtered far-red cells']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enabled:False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
    Select object sets to measure:FarRedCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:20|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notes:['Identify nuclei within follicles']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
    Parent objects:Follicles
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Follicle_Nuclei
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
RelateObjects:[module_num:21|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notes:['Identify red cells within follicles']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
    Parent objects:Follicles
    Child objects:RedCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Follicle_RedCells
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
MeasureObjectIntensity:[module_num:22|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notes:['Measure intensity of far-red channel in red cells']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
    Select images to measure:FarRed
    Select objects to measure:Follicle_Nuclei, Follicle_RedCells, RedCells

ExportToSpreadsheet:[module_num:23|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notes:['Save measurements']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/Users/tcs6/Desktop/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
RescaleIntensity:[module_num:24|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notes:['Enhance contrast of blue image for export']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enabled:False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
    Select the input image:DAPI
    Name the output image:DAPI_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:25|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notes:['Enhance contrast of red channel for export']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enabled:False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
    Select the input image:Red
    Name the output image:Red_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:26|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notes:['Create an image containing all channels']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:MergeFluor
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    Hidden:4
    Image name:DAPI
    Color:#0000FF
    Weight:1.0
    Image name:Green
    Color:#00ff00
    Weight:1.0
    Image name:Red
    Color:#FF0000
    Weight:1.0
    Image name:FarRed
    Color:#FF00FF
    Weight:1.0

OverlayOutlines:[module_num:27|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notes:['Overlay thin outlines of nuclei on the merged image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MergeFluor
    Name the output image:MergeNuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FEFF80
    Select objects to display:Nuclei

OverlayOutlines:[module_num:28|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notes:['Add thick outlines of the far red cells and follicles']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MergeNuclei
    Name the output image:MergeRedCells
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FFFEFF
    Select objects to display:RedCells
    Select outline color:#FFFF00
    Select objects to display:Follicles

SaveImages:[module_num:29|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notes:['Save image showing the identified cells and follicles']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
    Select the type of image to save:Image
    Select the image to save:MergeRedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/Yunkyoung Lee images/Total vs red cells/10x vs 20x/20x results pipeline 2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
