CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:41
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<ChannelNumber>[0-9])-(?P<Genotype>[A-Z]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:4.425
    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:lyso
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['We rescale the intensity, which normalizes the data. Variation in intensity due to variation in sample prep and image acquisition will be minimized and the pipeline performance will be more consistent. Also, when visuals are created the intensity will fill a larger fraction of the dynamic range.']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
    Select the input image:DNA
    Name the output image:RescaleIntensityDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:lyso
    Name the output image:RescaleIntensityLyso
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:7|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notes:['Downsampling the image will increase the processing speed. This is a good option when the objects of interest are large enough, and retain their shape shrunken.']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
    Select the input image:RescaleIntensityDNA
    Name the output image:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:8|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
    Select the input image:ResizeDNA
    Name the output image:MedianFilter
    Window:9

Threshold:[module_num:9|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notes:['Detect nuclei']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
    Select the input image:MedianFilter
    Name the output image:ApplyThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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
RemoveHoles:[module_num:10|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
    Select the input image:ApplyThreshold
    Name the output image:RemoveHoles
    Size of holes to fill:30

Closing:[module_num:11|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notes:['closing with element 1 didn’t seem to help with oversegmentation']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enabled:False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
    Select the input image:RemoveHoles
    Name the output image:Closing
    Structuring element:Disk,1

Watershed:[module_num:12|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
    Select the input image:RemoveHoles
    Name the output object:Watershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:12
    Downsample:1
    Separate watershed labels:No

ResizeObjects:[module_num:13|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notes:['Expands the nuclei back to their original size']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
    Select the input object:Watershed
    Name the output object:Nuclei
    Method:Factor
    Factor:4
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
MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:uint16
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
Erosion:[module_num:16|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notes:['generate markers for future use']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
    Select the input image:NucleiImage
    Name the output image:Erosion
    Structuring element:disk,5

Threshold:[module_num:17|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notes:['Threshold Lysosomes']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
    Select the input image:RescaleIntensityLyso
    Name the output image:LysoThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ImageMath:[module_num:19|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MembInvert
    Image or measurement?:Image
    Select the first image:MembThreshold
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:20|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:RescaleIntensityDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RescaleIntensityMemb
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:RescaleIntensityMito
    Multiply the third image by:1.0
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
Resize:[module_num:21|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
    Select the input image:ImageAfterMath
    Name the output image:ResizeImageAfterMath
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Closing:[module_num:22|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
    Select the input image:ResizeImageAfterMath
    Name the output image:ImageAfterMathClosing
    Structuring element:disk,17

Resize:[module_num:23|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
    Select the input image:ImageAfterMathClosing
    Name the output image:ResizeIAMC
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Threshold:[module_num:24|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
    Select the input image:ResizeIAMC
    Name the output image:MonolayerMask
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ImageMath:[module_num:25|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MonolayerInvert
    Image or measurement?:Image
    Select the first image:MonolayerMask
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RemoveHoles:[module_num:26|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
    Select the input image:MembInvert
    Name the output image:MembInvertRemoveHoles
    Size of holes to fill:20

ImageMath:[module_num:27|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MembFinal
    Image or measurement?:Image
    Select the first image:MembInvertRemoveHoles
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MonolayerInvert
    Multiply the second image by:1.0
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
Watershed:[module_num:28|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
    Select the input image:MembFinal
    Name the output object:Cells
    Generate from:Markers
    Markers:Erosion
    Mask:MembFinal
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell-labels
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei-labels
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:32|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityDNA
    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Nuclei

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei-outlines
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayObjects:[module_num:34|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
    Input:RescaleIntensityDNA
    Name the output image:NucleiOverlay
    Objects:Nuclei
    Opacity:0.1

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei-overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayObjects:[module_num:36|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
    Input:RescaleIntensityMemb
    Name the output image:CellsOverlay
    Objects:Cells
    Opacity:0.1

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:CellsOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells-overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:38|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
    Hidden:2
    Select an image to measure:DNA
    Select an image to measure:mito
    Select objects to measure:Nuclei
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:39|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:40|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:41|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:3d_monolayer_
    Overwrite existing files without warning?:Yes
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