CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Extract channel number and genotype from filename following pattern.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<ChannelNumber>[0-9])-(?P<Genotype>[A-Z]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Provide the correct XYZ ratio']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:4.46
    Select the rule criteria:and (file does endwith "ch2.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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notes:['Downsample DNA channel by 4x', '', 'Downsampling the image will increase the processing speed. This is a good option when the objects of interest are large enough, and retain their shape shrunken.']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enabled:False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
    Select the input image:DNA
    Name the output image:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:6|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notes:['Smooth the resized DNA channel (omitted to save time)']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
    Select the input image:DNA
    Name the output image:MedianFilter
    Window:7

Threshold:[module_num:7|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notes:['Detect nuclei in downsampled image (if useing median, set smoothing =0. If not sing median, set smoothing scale to ….)']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
    Select the input image:MedianFilter
    Name the output image:NucleiThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
RemoveHoles:[module_num:8|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notes:['Fill holes in the nuclei']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enabled:False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
    Select the input image:NucleiThreshold
    Name the output image:NucleiRemoveHoles
    Size of holes to fill:5

Closing:[module_num:9|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notes:['closing with element 1 didn’t seem to help with oversegmentation']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enabled:False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
    Select the input image:NucleiRemoveHoles
    Name the output image:NucleiClosing
    Structuring element:Disk,1

Watershed:[module_num:10|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notes:['Split adjacent nuclei']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
    Select the input image:NucleiThreshold
    Name the output object:NucleiWatershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:12
    Downsample:4
    Separate watershed labels:No

ResizeObjects:[module_num:11|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enabled:False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
    Select the input object:NucleiWatershed
    Name the output object:Nuclei
    Method:Factor
    Factor:4
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
ConvertObjectsToImage:[module_num:12|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notes:['Generate an image of nuclei.', '', 'this image could be used to generate markers for cell identification']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
    Select the input objects:NucleiWatershed
    Name the output image:NucleiImage
    Select the color format:uint16
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
DilateObjects:[module_num:13|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notes:['Expand the nuclei by ~1 µm.  Pixel size in xy is ~0.07 um. ', '', 'Does this create a problem if the pixels are not isotropic?', ' ']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
    Select the input object:NucleiWatershed
    Name the output object:NucDilated_1
    Structuring element:disk,3

ConvertObjectsToImage:[module_num:14|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notes:['We can’t directly subtract the original nuclei from the expanded nuclei so we convert the dilated objects to an image, mask the image, then convert back to new 3D objects.', '  ']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
    Select the input objects:NucDilated_1
    Name the output image:Nuclei_Dilated_Image
    Select the color format:uint16
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
MaskImage:[module_num:15|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notes:['Generate an images that is the dilated nuclei masked by the original nuclei']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
    Select the input image:Nuclei_Dilated_Image
    Name the output image:NucRing_1_Image
    Use objects or an image as a mask?:Image
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    Select image for mask:NucleiImage
    Invert the mask?:Yes

ConvertImageToObjects:[module_num:16|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notes:['Convert the ring back into objects']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
    Select the input image:NucRing_1_Image
    Name the output object:NucRing_1
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:17|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enabled:False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
    Select objects to measure:Nuclei
    Select objects to measure:NucDilated_1
    Select objects to measure:NucRing_1
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:18|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notes:['Measure lysosome channel (eventually replace the nuclei objects with the expanding rings around the nuclei)']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enabled:False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
    Hidden:1
    Select an image to measure:lyso
    Select objects to measure:Nuclei
    Select objects to measure:NucDilated_1
    Select objects to measure:NucRing_1

SaveImages:[module_num:19|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notes:['Save Nuclei image']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_test2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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notes:['Save Nuclei Ring image']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucRing_1_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_test2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:21|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notes:['Save results']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:test2_
    Overwrite existing files without warning?:Yes
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