CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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notes:['Find the positive areas']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
    Select the input image:Orig
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertImageToObjects:[module_num:6|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notes:['Create objects from the positive areas']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
    Select the input image:Threshold
    Name the output object:ThresholdToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

DilateObjects:[module_num:7|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notes:['Expand the objects']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
    Select the input object:ThresholdToObjects
    Name the output object:DilateObjects
    Structuring element:disk,24

MeasureObjectSizeShape:[module_num:8|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notes:['Measure the original objects']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
    Select objects to measure:ThresholdToObjects
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:9|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notes:['Measure the dilated objects']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
    Select objects to measure:DilateObjects
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:10|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notes:['Export the measurements']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:11|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notes:['Create an image of the original objects for documentation']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
    Select the input objects:ThresholdToObjects
    Name the output image:ThresholdObjectsImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:12|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notes:['Save the original thresholded objects as an image']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
    Select the type of image to save:Image
    Select the image to save:ThresholdObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:13|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notes:['Create an image of the dilated objects for documentation']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
    Select the input objects:DilateObjects
    Name the output image:DilatedObjectsImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:14|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notes:['Save the image of dilated objects']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
    Select the type of image to save:Image
    Select the image to save:DilatedObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_dilated
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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