CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "frame")
    Name to assign these images:Input
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///D:/Fafa/Drozdze/AsPlugin/Examples/2_InhomogeneousBackground/Input/background.tif   
    Name to assign this image:BackgroundImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyYeastCells:[module_num:5|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
    Select the input image:Input
    Name the output object:YeastCells
    Average cell diameter in pixels:27.0
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
    Select the empty field image:BackgroundImage
    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:Yes
    Do you want to segment brightfield images?:Yes
    Minimal area of accepted cell in pixels:900
    Maximum area of accepted cell in pixels:4500
    Do you want to filter cells by area?:No
    Select the background calculation mode:File
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[0.1, 0.0442, 304.45, 15.482, 189.40820000000002, 7.0], [300, 10, 0, 18, 10]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Leave blank
    Iterations:6
    Seeds from border:1.2
    Seeds from content:1.2
    Seeds from centroid:1.2
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Input
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:YeastCells

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_YeastCells,Image|Width_Input,Image|FileName_Input,Image|FileName_BackgroundImage,YeastCells|Number_Object_Number,YeastCells|Location_Center_Y,YeastCells|Location_Center_X
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:SegmentedCells_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:YeastCells
    Name the output image:YeastCells
    Select the color format:Color
    Select the colormap:hsv

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:YeastCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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