CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyYeastCells:[module_num:5|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
    Select the input image:Input
    Name the output object:YeastCells
    Average cell diameter in pixels:40
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:Yes
    Do you want to segment brightfield images?:Yes
    Minimal area of accepted cell in pixels:700
    Maximum area of accepted cell in pixels:4500000
    Do you want to filter cells by area?:Yes
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[0.0442, 304.45, 15.482, 189.40820000000002], [300, 10, 0, 18, 10]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Yes
    Iterations:6
    Seeds from border:1.2
    Seeds from content:1.2
    Seeds from centroid:1.2
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:YeastCells
    Calculate the Zernike features?:Yes

RescaleIntensity:[module_num:7|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
    Select the input image:Input
    Name the output image:RescaledBlue
    Rescaling method:Stretch each image to use the full intensity range
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
DisplayDataOnImage:[module_num:8|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
    Display object or image measurements?:Object
    Select the input objects:YeastCells
    Measurement to display:Features_Quality
    Select the image on which to display the measurements:RescaledBlue
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    Name the output image that has the measurements displayed:DisplayImage1
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    Image elements to save:Axes
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    Display mode:Color
    Color map:Spectral
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

DisplayDataOnImage:[module_num:9|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
    Display object or image measurements?:Object
    Select the input objects:YeastCells
    Measurement to display:AreaShape_Compactness
    Select the image on which to display the measurements:RescaledBlue
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    Name the output image that has the measurements displayed:DisplayImage2
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    Image elements to save:Axes
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    Display mode:Color
    Color map:Spectral
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

DisplayDataOnImage:[module_num:10|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
    Display object or image measurements?:Object
    Select the input objects:YeastCells
    Measurement to display:AreaShape_Eccentricity
    Select the image on which to display the measurements:RescaledBlue
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    Name the output image that has the measurements displayed:DisplayImage3
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    Image elements to save:Axes
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    Display mode:Color
    Color map:Spectral
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage1
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Quality
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Compactness
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Eccentricity
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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