CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyYeastCells:[module_num:5|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
    Select the input image:Input
    Name the output object:YeastCells
    Average cell diameter in pixels:40
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:Yes
    Do you want to segment brightfield images?:Yes
    Minimal area of accepted cell in pixels:700
    Maximum area of accepted cell in pixels:4500000
    Do you want to filter cells by area?:Yes
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[0.0442, 304.45, 15.482, 189.40820000000002], [300, 10, 0, 18, 10]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Yes
    Iterations:6
    Seeds from border:1.2
    Seeds from content:1.2
    Seeds from centroid:1.2
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:YeastCells
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:7|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
    Select the objects to filter:YeastCells
    Name the output objects:FilteredBlue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:Features_Quality
    Filter using a minimum measurement value?:Yes
    Minimum value:25.0
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.25
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.7

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:FilteredBlue
    Calculate the Zernike features?:Yes

EnhanceEdges:[module_num:9|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
    Select the input image:Input
    Name the output image:EdgedImage
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:EdgedImage
    Select objects to measure:FilteredBlue

MeasureTexture:[module_num:11|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:EdgedImage
    Select objects to measure:FilteredBlue
    Texture scale to measure:3
    Measure images or objects?:Objects

RescaleIntensity:[module_num:12|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
    Select the input image:Input
    Name the output image:RescaledBlue
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:Yes
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    Name the output image:FilterOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:FilteredBlue

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:FilterOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:15|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:OverlappingDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:FilteredBlue
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:FilterOverlay,RescaledBlue
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:YeastExp
    Which objects should be used for locations?:FilteredBlue
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:Validity
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:Histogram
    Type of measurement to plot on the X-axis:Object
    Enter the object name:FilteredBlue
    Select the X-axis measurement:AreaShape_Area
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis index:ImageNumber
