CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyYeastCells:[module_num:5|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
    Select the input image:Input
    Name the output object:YeastCells
    Average cell diameter in pixels:40
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:Yes
    Do you want to segment brightfield images?:Yes
    Minimal area of accepted cell in pixels:700
    Maximum area of accepted cell in pixels:4500000
    Do you want to filter cells by area?:Yes
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[0.0442, 304.45, 15.482, 189.40820000000002], [300, 10, 0, 18, 10]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Yes
    Iterations:6
    Seeds from border:1.2
    Seeds from content:1.2
    Seeds from centroid:1.2
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:YeastCells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:YeastCells
    Name the output objects:FilteredBlue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Features_Quality
    Filter using a minimum measurement value?:Yes
    Minimum value:25.0
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.25
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.7
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:FilteredBlue
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

EnhanceEdges:[module_num:9|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
    Select the input image:Input
    Name the output image:EdgedImage
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:EdgedImage
    Select objects to measure:FilteredBlue

MeasureTexture:[module_num:11|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
    Select images to measure:EdgedImage
    Select objects to measure:FilteredBlue
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

FilterObjects:[module_num:12|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
    Select the objects to filter:FilteredBlue
    Name the output objects:FilteredFinal
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\Fafa\\Drozdze\\AsPlugin\\Examples\\4_DarkButOverlapping\\Input
    Rules or classifier file name:rules.txt
    Class number:1
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:Yes

RescaleIntensity:[module_num:13|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
    Select the input image:Input
    Name the output image:RescaledBlue
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledBlue
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:YeastCells
    Select outline color:yellow
    Select objects to display:FilteredBlue
    Select outline color:green
    Select objects to display:FilteredFinal

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_YeastCells,Image|Width_Input,Image|FileName_Input,Image|ExecutionTime_05IdentifyYeastCells,FilteredFinal|Location_Center_Y,FilteredFinal|Location_Center_X,FilteredFinal|Number_Object_Number,FilteredBlue|Number_Object_Number,FilteredBlue|Location_Center_Y,FilteredBlue|Location_Center_X,YeastCells|Number_Object_Number,YeastCells|Location_Center_Y,YeastCells|Location_Center_X
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:SegmentedCells_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:17|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
    Select the input objects:FilteredFinal
    Name the output image:FilteredFinal
    Select the color format:Color
    Select the colormap:hsv

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:FilteredFinal
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_filteredFinal
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
