CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyYeastCells:[module_num:5|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
    Select the input image:Input
    Name the output object:YeastCells
    Average cell diameter in pixels:28.0
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:No
    Do you want to segment brightfield images?:No
    Minimal area of accepted cell in pixels:200
    Maximum area of accepted cell in pixels:4500000
    Do you want to filter cells by area?:Yes
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[14.151836066272796, 620.33630451168995, 36.327340436241307, 204.52403930202644], [121.84744158197137, 62.367484766161994, 21.247280211131738, 50.0, 50.0]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Yes
    Iterations:6
    Seeds from border:1.5
    Seeds from content:1.5
    Seeds from centroid:1.5
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:YeastCells
    Calculate the Zernike features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:YeastCells
    Name the output objects:FilteredBlue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.15
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.75

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Input
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:YeastCells
    Select outline color:#75FF75
    Select objects to display:FilteredBlue

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:FilteredBlue
    Name the output image:FilteredBlue
    Select the color format:Color
    Select the colormap:hsv

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:FilteredBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_filteredFinal
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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