CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Input
    Name the output image:Illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Input
    Name the output image:CorrInput
    Select the illumination function:Illum
    Select how the illumination function is applied:Divide

IdentifyYeastCells:[module_num:7|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
    Select the input image:CorrInput
    Name the output object:YeastCellsOrg
    Average cell diameter in pixels:40.0
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:No
    Do you want to segment brightfield images?:No
    Minimal area of accepted cell in pixels:300
    Maximum area of accepted cell in pixels:4500000
    Do you want to filter cells by area?:Yes
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[0.0442, 304.45, 15.482, 189.40820000000005], [300, 10, 0, 18, 10]]
    Number of steps in the autoadaptation procedure:2
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    Do you want to edit details of segmentation precision?:Yes
    Iterations:6
    Seeds from border:2
    Seeds from content:2
    Seeds from centroid:2
    Contour points:44
    Contour precision:49.751244
    Cell size variants:3

ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:YeastCellsOrg
    Name the output objects:Smoothing1A
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Smoothing1A
    Name the output objects:YeastCells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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    Retain the outlines of the identified objects?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:YeastCells
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:YeastCells
    Name the output objects:FilteredBlue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.15
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.75

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in older Excel versions?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_FilteredBlue,Image|Count_Smoothing1A,Image|Count_YeastCellsOrg,Image|Count_YeastCells,Image|ExecutionTime_08ExpandOrShrinkObjects,Image|ExecutionTime_07IdentifyYeastCells,Image|ExecutionTime_11FilterObjects,Image|ExecutionTime_09ExpandOrShrinkObjects,Image|ExecutionTime_10MeasureObjectSizeShape,FilteredBlue|Location_Center_Y,FilteredBlue|Location_Center_X,FilteredBlue|Parent_YeastCells,FilteredBlue|Number_Object_Number,Experiment|Pipeline_Pipeline,YeastCells|Number_Object_Number,YeastCells|Location_Center_Y,YeastCells|Location_Center_X,YeastCells|Children_FilteredBlue_Count,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SegmentedCells_
    Overwrite existing files without warning?:Yes
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Input
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:YeastCells
    Select outline color:#77FF77
    Select objects to display:FilteredBlue

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:FilteredBlue
    Name the output image:FilteredBlue
    Select the color format:Color
    Select the colormap:hsv

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:FilteredBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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