CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyYeastCells:[module_num:5|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
    Select the input image:Input
    Name the output object:YeastCellsBrightEdges
    Average cell diameter in pixels:30
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:Yes
    Do you want to segment brightfield images?:Yes
    Minimal area of accepted cell in pixels:900
    Maximum area of accepted cell in pixels:4500
    Do you want to filter cells by area?:No
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[6.5646663830056413, 166.88203608057123, 1.2897726130553693, 382.71270237438114], [102.66629780878836, 50.551480868420271, 11.813490415590437, 26.490682487482271, -10.0]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Leave blank
    Iterations:6
    Seeds from border:1.0
    Seeds from content:1.0
    Seeds from centroid:1.0
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

IdentifyYeastCells:[module_num:6|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
    Select the input image:Input
    Name the output object:YeastCellsDarkEdges
    Average cell diameter in pixels:30
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:No
    Do you want to segment brightfield images?:Yes
    Minimal area of accepted cell in pixels:900
    Maximum area of accepted cell in pixels:4500
    Do you want to filter cells by area?:No
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[6.5646663830056413, 166.88203608057123, 1.2897726130553693, 382.71270237438114], [102.66629780878836, 50.551480868420271, 11.813490415590437, 26.490682487482271, -10.0]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Leave blank
    Iterations:6
    Seeds from border:1.0
    Seeds from content:1.0
    Seeds from centroid:1.0
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Input
    Name the output image:BrightDarkOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFF900
    Select objects to display:YeastCellsBrightEdges
    Select outline color:#01E4FE
    Select objects to display:YeastCellsDarkEdges

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:BrightDarkOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlinesBoth
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:YeastCellsBrightEdges
    Name the output image:YeastCellsBrightEdges
    Select the color format:Color
    Select the colormap:hsv

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:YeastCellsDarkEdges
    Name the output image:YeastCellsDarkEdges
    Select the color format:Color
    Select the colormap:hsv

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:YeastCellsBrightEdges
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation_brightsetting
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:YeastCellsDarkEdges
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation_darksetting
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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