CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DarkCloser")
    Name to assign these images:Input
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyYeastCells:[module_num:5|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
    Select the input image:Input
    Name the output object:YeastCells
    Average cell diameter in pixels:40
    Segmentation precision:2
    Maximal overlap allowed while final filtering of cells:0.2
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    Use advanced configuration parameters?:Yes
    Is the area without cells (background) brighter then cell interiors?:Yes
    Do you want to segment brightfield images?:Yes
    Minimal area of accepted cell in pixels:900
    Maximum area of accepted cell in pixels:4500
    Do you want to filter cells by area?:No
    Select the background calculation mode:Actual image
    Do you want to see autoadapted parameters?:Yes
    Autoadapted parameters: :[[3.0116572718558308, 17.798432404820577, 5.2218626783353272, 121.59130631607096], [360.30589983033559, 100.0, -18.195291757355008, 23.704361872083886, 14.381204237688213]]
    Number of steps in the autoadaptation procedure:1
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    Do you want to edit details of segmentation precision?:Yes
    Iterations:6
    Seeds from border:1.2
    Seeds from content:1.2
    Seeds from centroid:1.2
    Contour points:44
    Contour precision:49.751244
    Cell size variants:2

OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Input
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:YeastCells

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:YeastCells
    Name the output image:YeastCells
    Select the color format:Color
    Select the colormap:hsv

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:YeastCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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