CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag files and folders into the space below.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The metadata is used to determine the well and tile number.', 'This pipeline assumes images named according to Cytation 5 (Gen5 software) conventions.', 'The "Tile" metadata is not needed if you are using stitched images, but it will not cause problems.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2}).{3}_(?P<Channel>[0-9])_(?P<Tile>[0-9]{1,2})*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Here, we define the channels based on text in the file name.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "DAPI")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "GFP")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['This is where we define the groups that will be projected later. ', 'We use the previously defined metadata to greate groups such that each group contains exactly one Z stack.', 'The "Tile" category is not needed if you are using stitched images, but it will not cause problems.', '', 'To check the grouping, look at the Grouping list and make sure the Count on each row is the same as the number of Z slices in each stack.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei in the Hoechst channel']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Try to identify cell bodies based on low-level fluorescence in the green channel.', 'The Propagation method detects lots of axons, rather broadly. ', 'Leave Log transform off to limit the axon detection.', 'Otsu does a better job than Min Cross Entropy of limiting to the cell body. Large regularization factor is required.', '']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellsPropagated
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
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    Regularization factor:100
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellsDistance
    Select the method to identify the secondary objects:Distance - B
    Select the input image:OrigGreen
    Number of pixels by which to expand the primary objects:4
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
MeasureObjectIntensity:[module_num:8|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notes:['Measure red and green intensity']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
    Select images to measure:OrigGreen, OrigRed
    Select objects to measure:CellsDistance, CellsPropagated, Nuclei

GrayToColor:[module_num:9|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notes:['Overlay original channels before saving']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:OrigRed
    Select the image to be colored green:OrigGreen
    Select the image to be colored blue:OrigBlue
    Name the output image:Overlay
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Overlay
    Name the output image:OutlinesPropagated
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#00F2DA
    Select objects to display:Nuclei
    Select outline color:#FFFFFF
    Select objects to display:CellsPropagated

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Overlay
    Name the output image:OutlinesDistance
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#00F2DA
    Select objects to display:Nuclei
    Select outline color:#FFFFFF
    Select objects to display:CellsDistance

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NeuronCount_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:13|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notes:['Save the image with outlined nuclei and cells. This is useful for checking the segmentation.']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
    Select the type of image to save:Image
    Select the image to save:OutlinesPropagated
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>-\g<Tile>-outlinesProp
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    Saved file format:png
    Output file location:Default Output Folder|\g<Run>
    Image bit depth:No conversion
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OutlinesDistance
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>-\g<Tile>-outlinesDist
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    Saved file format:png
    Output file location:Default Output Folder|\g<Run>
    Image bit depth:No conversion
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
