CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This pipeline takes 3-channel TIFFs and 3 corresponding illumination images as input, and:', '\\t— applies the illumination correction ', '\\t— detects nuclei based on the 1st channel', '\\t— determines mean and integrated intensity of those objects in each channel.', '', 'NOTE: You MUST drag both the data files AND the illumination files into the Images section. Then select the correct illumination images in NamesAndTypes.', ' ', 'Theresa Swayne, 2018, for Demis Menolfi and Shan Zha']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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does contain ".npy")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Series": "text", "Frame": "text", "FileLocation": "text", "basename": "text", "XY": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<basename>.*)_XY(?P<XY>[0-9]{1,5})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['— Loads the raw data images.', '— Loads the illumination functions created by the illum pipeline. (Make sure you select the proper images each time!)', '', '*** Remember to click Update and check that each raw image is included and paired with the illumination images. ***', '', 'The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:3
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "illum")
    Name to assign these images:raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/confocal/Desktop/2018-11-05%20Demis/2018-11-05%20output/2018-11-05%20data%20illum%20results/npy2018-12-03/Atr%2BC%20Day2_XY0100C1illum.npy   
    Name to assign this image:C1illum
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    Select the image type:Illumination function
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    Single image location:file:/Users/confocal/Desktop/2018-11-05%20Demis/2018-11-05%20output/2018-11-05%20data%20illum%20results/npy2018-12-03/Atr%2BC%20Day2_XY0100C2illum.npy   
    Name to assign this image:C2illum
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    Select the image type:Illumination function
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    Single image location:file:/Users/confocal/Desktop/2018-11-05%20Demis/2018-11-05%20output/2018-11-05%20data%20illum%20results/npy2018-12-03/Atr%2BC%20Day2_XY0100C3illum.npy   
    Name to assign this image:C3illum
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['> Splits the channels']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
    Select the input image:raw
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:Red: 1
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    Image name:Channel1DNA
    Channel number:Green: 2
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    Image name:Channel2EdU
    Channel number:Blue: 3
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    Image name:Channel3gH2AX

CorrectIlluminationApply:[module_num:6|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notes:['']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
    Select the input image:Channel1DNA
    Name the output image:Channel1DNACorr
    Select the illumination function:C1illum
    Select how the illumination function is applied:Subtract
    Select the input image:Channel2EdU
    Name the output image:Channel2EdUCorr
    Select the illumination function:C2illum
    Select how the illumination function is applied:Subtract
    Select the input image:Channel3gH2AX
    Name the output image:Channel3gH2AXCorr
    Select the illumination function:C3illum
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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notes:['> The Lower bound on threshold prevents false positives in images with no cells, by preventing the auto-threshold from finding faint artifacts. The value will depend on how bright the true staining is. ', '> 0.05 resulted in a large number of false negatives.', '> The clumping was turned off for test # 2.']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
    Select the input image:Channel1DNACorr
    Name the primary objects to be identified:C1DNANuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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
MeasureObjectIntensity:[module_num:8|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notes:['> Measures intensity on the illumination-corrected images ']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
    Hidden:3
    Select an image to measure:Channel1DNACorr
    Select an image to measure:Channel2EdUCorr
    Select an image to measure:Channel3gH2AXCorr
    Select objects to measure:C1DNANuclei

MeasureObjectSizeShape:[module_num:9|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notes:['> This step is not needed for QBIC but is included in order to understand the impact of extreme particle size and shape on the results']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
    Select objects to measure:C1DNANuclei
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:10|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notes:['> This converts the objects to an image for later inspection. Unlike the Mask image it shows objects not pixels.', '> The uint16 option allows for > 255 objects in an image.']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
    Select the input objects:C1DNANuclei
    Name the output image:NucleiObjects
    Select the color format:uint16
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
SaveImages:[module_num:11|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notes:['> saves the label image showing the objects']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
    Select the type of image to save:Image
    Select the image to save:NucleiObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_obj
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskImage:[module_num:12|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notes:['> Generates the mask of the nuclei for later inspection. ', '(In ImageJ, load the mask image, Edit > Create Selection, then select the original image and Edit > Restore selection to see the cells outlined)', '']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enabled:False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
    Select the input image:Channel1DNA
    Name the output image:NucleiMask
    Use objects or an image as a mask?:Objects
    Select object for mask:C1DNANuclei
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    Invert the mask?:No

SaveImages:[module_num:13|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notes:['> Saves the mask for later inspection']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enabled:False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
    Select the type of image to save:Mask
    Select the image to save:NucleiMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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notes:['> Save illumination corrected image — C1 (only for testing purposes, as it produces many outputs!)']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Channel1DNACorr
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_C1Corr
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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notes:['> Save illumination corrected image — C2']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Channel2EdUCorr
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_C2Corr
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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notes:['> Save illumination corrected image — C3']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Channel3gH2AXCorr
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_C3Corr
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['> Export measurements']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:C1DNANuclei|Intensity_MinIntensity_Channel1DNACorr,C1DNANuclei|Intensity_MinIntensity_Channel2EdUCorr,C1DNANuclei|Intensity_MinIntensity_Channel3gH2AXCorr,C1DNANuclei|Intensity_IntegratedIntensity_Channel1DNACorr,C1DNANuclei|Intensity_IntegratedIntensity_Channel2EdUCorr,C1DNANuclei|Intensity_IntegratedIntensity_Channel3gH2AXCorr,C1DNANuclei|Intensity_MaxIntensity_Channel1DNACorr,C1DNANuclei|Intensity_MaxIntensity_Channel2EdUCorr,C1DNANuclei|Intensity_MaxIntensity_Channel3gH2AXCorr,C1DNANuclei|Intensity_MeanIntensity_Channel1DNACorr,C1DNANuclei|Intensity_MeanIntensity_Channel2EdUCorr,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2018-12-12_qbic_npy_corr
    Overwrite existing files without warning?:No
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