CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['> This takes a set of single-point, 3-channel tiffs and generates illumination functions, based on background in all of the images, for each channel. ', '> The 3 files are saved for use in a later pipeline.', '', '> Theresa Swayne for Demis Menolfi, 2018', '', 'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Series": "text", "Frame": "text", "FileLocation": "text", "basename": "text", "XY": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<basename>.*)_XY(?P<XY>[0-9]{1,5})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:Red: 1
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    Image name:Channel1DNA
    Channel number:Green: 2
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    Image name:Channel2EdU
    Channel number:Blue: 3
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    Image name:Channel3gH2AX

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Channel1DNA
    Name the output image:Channel1Illum
    Select how the illumination function is calculated:Background
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    Block size:80
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Channel2EdU
    Name the output image:Channel2Illum
    Select how the illumination function is calculated:Background
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    Block size:80
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Channel3gH2AX
    Name the output image:Channel3Illum
    Select how the illumination function is calculated:Background
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    Block size:80
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:Channel1Illum
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:C1illum
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:Channel2Illum
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:C2illum
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Channel3Illum
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:C3illum
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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