CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot startwith ".") (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:PDGFRalpha
    Channel number:3
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    Image name:SMA
    Channel number:4
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    Image name:Vimentin

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Vimentin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:PDGFRalpha, SMA
    Select objects to measure:Cells

GrayToColor:[module_num:9|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:4
    Image name:DAPI
    Color:#0000FF
    Weight:1.0
    Image name:PDGFRalpha
    Color:#00ff00
    Weight:1.0
    Image name:SMA
    Color:#FF0000
    Weight:1.0
    Image name:Vimentin
    Color:#FFFFFF
    Weight:1.0

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OutlineOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0000
    Select objects to display:Nuclei
    Select outline color:#FFFF00
    Select objects to display:Cells

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:OutlineOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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