CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Genotype>HS[0-9][0-9])_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['1. RAGE (white in colorized version)', '2. proSPC (green)', '3. HT1-56 (red)  (no hyphen allowed in name)', '4. DAPI (blue)']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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:RAGE_1
    Channel number:2
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    Image name:proSPC_2
    Channel number:3
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    Image name:HT1_56_3
    Channel number:4
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    Image name:DAPI_4

IdentifyPrimaryObjects:[module_num:6|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notes:['Lower bound on threshold is necessary to avoid artifact from image edge, and to keep border close to nuclei. Also smaller size of smoothing filter.']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
    Select the input image:DAPI_4
    Name the primary objects to be identified:OrigNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,18
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.011,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:7|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notes:['Increase nuclei size to help with detecting overlap with cytoplasmic markers']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
    Select the input objects:OrigNuclei
    Name the output objects:Nuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
Threshold:[module_num:8|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notes:['Set a threshold correction factor to avoid including fainter areas.', 'Set a lower bound to avoid including background areas.']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
    Select the input image:RAGE_1
    Name the output image:ThresholdRAGE
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:9|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notes:['lower bound: 0.05 gets bright spots']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
    Select the input image:proSPC_2
    Name the output image:ThresholdproSPC
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:10|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
    Select the input image:HT1_56_3
    Name the output image:ThresholdHT156
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.07,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:11|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
    Select objects to be masked:Nuclei
    Name the masked objects:NucleiRAGE
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdRAGE
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.3
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:12|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
    Select objects to be masked:Nuclei
    Name the masked objects:NucleiproSPC
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdproSPC
    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:13|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
    Select objects to be masked:Nuclei
    Name the masked objects:NucleiHT156
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdHT156
    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:14|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enabled:False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
    Select images to measure:HT1_56_3, RAGE_1, proSPC_2
    Select objects to measure:Nuclei, NucleiHT156, NucleiRAGE, NucleiproSPC

ClassifyObjects:[module_num:15|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notes:['RAGE intensity varies — need to find the correct threshold. 3 numbers ']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enabled:False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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MeanIntensity_RAGE_1
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,.15,1
    Give each bin a name?:No
    Enter the bin names separated by commas:one,two,three,four
    Retain an image of the classified objects?:Yes
    Name the output image:RAGEClassifiedNuclei
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
RescaleIntensity:[module_num:17|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enabled:False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
    Select the input image:RAGE_1
    Name the output image:RescaleRAGE
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
RescaleIntensity:[module_num:18|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enabled:False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
    Select the input image:proSPC_2
    Name the output image:RescaleSPC
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
RescaleIntensity:[module_num:19|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enabled:False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
    Select the input image:HT1_56_3
    Name the output image:RescaleHT
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
RescaleIntensity:[module_num:20|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enabled:False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
    Select the input image:DAPI_4
    Name the output image:RescaleDAPI
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
GrayToColor:[module_num:21|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enabled:False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
    Select a color scheme:Stack
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:4
    Image name:RescaleRAGE
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    Image name:RescaleSPC
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    Image name:RescaleHT
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    Image name:RescaleDAPI
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
OverlayOutlines:[module_num:22|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notes:['Image of nuclei and RAGE nuclei']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RAGE_1
    Name the output image:OverlayRAGE
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#0000FF
    Select objects to display:Nuclei
    Select outline color:#FB02FF
    Select objects to display:NucleiRAGE

OverlayOutlines:[module_num:23|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notes:['Image of nuclei and HT156 nuclei ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HT1_56_3
    Name the output image:OverlayHT
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#0000FF
    Select objects to display:Nuclei
    Select outline color:#FB0207
    Select objects to display:NucleiHT156

OverlayOutlines:[module_num:24|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notes:['Image of nuclei and proSPC nuclei']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:proSPC_2
    Name the output image:OverlaySPC
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#0000FF
    Select objects to display:Nuclei
    Select outline color:#21FF06
    Select objects to display:NucleiproSPC

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI_4
    Name the output image:OverlayDAPI
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:Nuclei

SaveImages:[module_num:26|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notes:['Save the overlay of nuclei and RAGE nuclei']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
    Select the type of image to save:Image
    Select the image to save:OverlayRAGE
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_RAGE
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:OverlayHT
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_HT156
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:OverlaySPC
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SPC
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:OverlayDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DAPI
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
