CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:4
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Testing cell detection and mito segmentation in yeast', '', 'Note: "CellProfiler 3D currently only works with TIFF files. TIFF files can be rather complicated, having hyper-stack structures with all channels and z-planes in a single file. The acceptable CellProfiler format for storing z-stacks is to have a separate TIFF file for each channel." (Github https://github.com/CellProfiler/tutorials/tree/master/3d_monolayer)', '', 'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.{3}(?P<Strain>.{6})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.{3}(?P<SourceImage>.*)$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.{9}-(?P<Treatment>.*)-
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'mito': u'SourceImage', u'trans': u'SourceImage'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:3.1
    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:trans
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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