CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MatchTemplate:[module_num:5|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
    Image:Orig
    Template:/Users/theresaswayne/Desktop/Cierra RLS/test template.tif
    Output:TemplateMatch

IdentifyPrimaryObjects:[module_num:6|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notes:['Grid requires objects or marks. Marks don’t seem to be working now. So try to ID the cups.']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enabled:False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
    Select the input image:Orig
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):40,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:TemplateMatch
    Name the primary objects to be identified:TemplateCups
    Typical diameter of objects, in pixel units (Min,Max):40,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:8|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enabled:False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
    Select the input objects:TemplateCups
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:Orig
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:9|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notes:['Capture size measurements to later exclude irregular background areas identified as cups.']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enabled:False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
    Select objects to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No

FilterObjects:[module_num:10|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notes:['Filter by form factor. Could be a little less stringent than 0.7.']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enabled:False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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.7
    Filter using a maximum measurement value?:No
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
DefineGrid:[module_num:11|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notes:['Generate a grid dividing the image into roughly 2500 x 1000 segments']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
    Name the grid:Grid
    Number of rows:16
    Number of columns:1
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
    Select the previously identified objects:TemplateCups
    Select the method to define the grid manually:Mouse
    Select the image to display:Orig
    Coordinates of the first cell:1260,500
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:1260,1500
    Row number of the second cell:2
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Select the image on which to display the grid:Orig
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:12|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notes:['Identify the grid squares as objects']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
    Select the defined grid:Grid
    Name the objects to be identified:GridSquares
    Select object shapes and locations:Rectangle Forced Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
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
Crop:[module_num:13|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notes:['Crop out the grid squares']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
    Select the input image:Orig
    Name the output image:Crop
    Select the cropping shape:Objects
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    Remove empty rows and columns?:All
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    Select the objects:GridSquares
