CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag files and folders into the space below.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The metadata is used to determine which images go together for projection.', 'This pipeline assumes images named according to Cytation 5 (Gen5 software) conventions.', 'The "Tile" metadata is not needed if you are using stitched images, but it will not cause problems.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2}).{3}_(?P<Channel>[0-9])_(?P<Tile>[0-9]{1,2})Z(?P<ZNumber>[0-9])*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Here we only need a single name, because the channel processing will happen in another pipeline. ', 'The images cannot be considered as 3D because of the requirements of the MakeProjection module.']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['This is where we define the groups that will be projected later. ', 'We use the previously defined metadata to greate groups such that each group contains exactly one Z stack.', 'The "Tile" category is not needed if you are using stitched images, but it will not cause problems.', '', 'To check the grouping, look at the Grouping list and make sure the Count on each row is the same as the number of Z slices in each stack.']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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Well
    Metadata category:Channel
    Metadata category:Tile

MakeProjection:[module_num:5|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
    Select the input image:orig
    Type of projection:Maximum
    Name the output image:Projection
    Frequency:6.0

SaveImages:[module_num:6|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notes:['The projection is saved in this step.', 'Important:  When to save = Last cycle.', '', ' ']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
    Select the type of image to save:Image
    Select the image to save:Projection
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:proj
    Saved file format:tiff
    Output file location:Default Output Folder|\g<Run>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
