CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', 'âx80x94', 'Use regular expressions to match and name metadata in the file and path names. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Specimen>.*)_(?P<Stain>.*)_(?P<FrameNumber>[0-9]*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "GFPHistone")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\\\/](?P<Run>.*)$
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "GFPHistone")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load the images by matching files in all folders against the text pattern âx80x98GFPHistoneâx80x99.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "GFPHistone")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'âx80x94', 'Group the analysis by the âx80x98Runâx80x99 metadata so that each folder is analyzed separately. ']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Run

MakeProjection:[module_num:5|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
    Select the input image:OrigColor
    Type of projection:Maximum
    Name the output image:ProjectionBlue
    Frequency:6.0

SaveImages:[module_num:6|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notes:['Save the tiled image as an PNG, naming each image according to âx80x98Specimenâx80x99 and âx80x98Frameâx80x99 metadata of the original image. Save the image in a new sub-folder created and named according to the âx80x98Runâx80x99 metadata.']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
    Select the type of image to save:Image
    Select the image to save:ProjectionBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:proj
    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<Run>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
