CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "MaxIP")
    Name to assign these images:orig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the channels']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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:BTubIII
    Channel number:3
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    Image name:FUS

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):60,130
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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notes:['Measure intensity of FUS in nuclei ']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
    Select images to measure:FUS
    Select objects to measure:Nuclei

FilterObjects:[module_num:8|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notes:['Exclude nuclei likely to be highly saturated, and nuclei that have low intensity (likely to be non-neuronal)']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
    Select the objects to filter:Nuclei
    Name the output objects:LessSaturatedFusPosNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_FUS
    Filter using a minimum measurement value?:Yes
    Minimum value:0.015
    Filter using a maximum measurement value?:Yes
    Maximum value:0.062
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
IdentifySecondaryObjects:[module_num:9|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notes:['Identify cell boundaries from the beta tubulin channel. Use distance criteria to limit the amount of neurites included and avoid cell overlap']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
    Select the input objects:LessSaturatedFusPosNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:BTubIII
    Number of pixels by which to expand the primary objects:120
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:8
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.012,1.0
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    Log transform before thresholding?:No
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
MeasureObjectNeighbors:[module_num:10|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notes:['Identify cell objects that touch each other']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:11|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notes:['Filter cells to remove any cell touching another cell (maximum 0 adjacent cells)']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
    Select the objects to filter:Cells
    Name the output objects:NonAdjacentCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select additional object to relabel:LessSaturatedFusPosNuclei
    Name the relabeled objects:NonAdjacentNuclei
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
GrayToColor:[module_num:12|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notes:['Combine the channels for editing and overlaying']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:FUS
    Select the image to be colored green:BTubIII
    Select the image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
EditObjectsManually:[module_num:13|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notes:['Manually add, remove, or edit cells']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
    Select the objects to be edited:NonAdjacentCells
    Name the edited objects:EditedCells
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:ColorImage
    Allow overlapping objects?:No

RelateObjects:[module_num:14|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notes:['Relate newly drawn cells to the nuclei inside them']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
    Parent objects:EditedCells
    Child objects:NonAdjacentNuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyTertiaryObjects:[module_num:15|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notes:['Define cytoplasm as whole cell minus nucleus']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
    Select the larger identified objects:EditedCells
    Select the smaller identified objects:NonAdjacentNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:16|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notes:['Measure FUS intensity in cytoplasm, nuclei, and whole cell']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
    Select images to measure:FUS
    Select objects to measure:Cytoplasm, EditedCells, NonAdjacentNuclei

CalculateMath:[module_num:17|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notes:['Calculate the ratio of the mean intensity in cytoplasm and nucleus']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
    Name the output measurement:CytoNucMeanRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_FUS
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:NonAdjacentNuclei
    Select the denominator measurement:Intensity_MeanIntensity_FUS
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:18|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notes:['Calculate the ratio of the integrated intensity in cytoplasm and nucleus']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
    Name the output measurement:CytoNucIntegrIntensRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_IntegratedIntensity_FUS
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:NonAdjacentNuclei
    Select the denominator measurement:Intensity_IntegratedIntensity_FUS
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:20|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notes:['Convert the filtered cytoplasm objects to a "label image" to be used in ImageJ - each cytoplasm has a unique pixel value']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
    Select the input objects:Cytoplasm
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:21|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notes:['Save the label image as a tiff for future analysis']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_label
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

OverlayOutlines:[module_num:22|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notes:['Outline the final cells on the color image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FAFF00
    Select objects to display:EditedCells

SaveImages:[module_num:23|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notes:['Save the image of edited cells overlaid on the color image']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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_filtered_Cells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:24|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notes:['Outline the original cells and nuclei on the color image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OverlayUnedited
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FFB4FF
    Select objects to display:Nuclei
    Select outline color:#FAF6ED
    Select objects to display:Cells

SaveImages:[module_num:25|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notes:['Save the image of original (unedited) cells overlaid on the color image']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
    Select the type of image to save:Image
    Select the image to save:OverlayUnedited
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_unedited_Cells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
