CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Tip: Click Apply filters to the file list before each run to verify the images are correctly recognized.', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Image type: Color image for multichannel image files like those from a confocal. Grayscale image for data where each channel is in a separate file (e.g. Cytation). ', 'Set intensity range: use "Image bit-depth" to ensure that the intensity values are scaled comparably across the data set, especially if they vary a lot.', '', 'Tip: Click Update before each run to verify the images are correctly recognized.', ' ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "MAX")
    Name to assign these images:origMC
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "classified")
    Name to assign these images:origRBCMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Color to Gray is the first step in analyzing multichannel files.', "You don't need to include all the channels, only the ones you're analyzing", '', 'Tip: Name the channels after the fluorophore (not the target of the staining)']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
    Select the input image:origMC
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:5
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    Image name:Hoechst
    Channel number:1
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    Image name:Channel1

ConvertImageToObjects:[module_num:6|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notes:['Identify objects in the RBC mask']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
    Select the input image:origRBCMask
    Name the output object:MaskRBCObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:MaskRBCObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:MaskRBCObjects
    Name the output objects:RBC
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Class name:1
    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
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
GrayToColor:[module_num:9|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:2
    Image name:Channel1
    Color:#FF00FF
    Weight:1.0
    Image name:Hoechst
    Color:#00FFFF
    Weight:1.0

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFFFF
    Select objects to display:RBC

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:origMC
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Channel1
    Select objects to measure:RBC

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Rab5_
    Overwrite existing files without warning?:No
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