CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<PlateTime>[0-9]{6}_[0-9]{6})_Plate
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:PI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Align:[module_num:5|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:template
    Name the first output image:AlignedPlate
    Select the second input image:DAPI
    Name the second output image:AlignedDAPI
    Select the additional image:PI
    Name the output image:AlignedPI
    Select how the alignment is to be applied:Similarly

MaskImage:[module_num:6|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enabled:False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
    Select the input image:AlignedDAPI
    Name the output image:MaskedAlignedDAPI
    Use objects or an image as a mask?:Image
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    Select image for mask:AlignedPlate
    Invert the mask?:Yes

Crop:[module_num:7|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
    Select the input image:DAPI
    Name the output image:CropDAPI
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:50,1224
    Top and bottom rectangle positions:0,815
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    Remove empty rows and columns?:All
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
Crop:[module_num:8|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
    Select the input image:PI
    Name the output image:CropPI
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:50,1224
    Top and bottom rectangle positions:0,815
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    Remove empty rows and columns?:All
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
MaskImage:[module_num:9|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enabled:False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
    Select the input image:AlignedPI
    Name the output image:MaskedAlignedPI
    Use objects or an image as a mask?:Image
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    Select image for mask:AlignedPlate
    Invert the mask?:Yes

MeasureImageQuality:[module_num:10|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:DAPI
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
FlagImage:[module_num:11|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:None
    Flag images based on low values?:Yes
    Minimum value:0.0
    Flag images based on high values?:Yes
    Maximum value:1.0
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    Ignore flag skips on last cycle?:No

IdentifyPrimaryObjects:[module_num:12|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notes:['Identify large dust particles in the DAPI channel']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
    Select the input image:CropDAPI
    Name the primary objects to be identified:Dust
    Typical diameter of objects, in pixel units (Min,Max):50,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:13|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notes:['Expand the dust slightly']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
    Select the input objects:Dust
    Name the output objects:ExpandedDust
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskImage:[module_num:14|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notes:['Remove the dust from the DAPI image']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
    Select the input image:CropDAPI
    Name the output image:DAPILessDust
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedDust
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    Invert the mask?:Yes

MaskImage:[module_num:15|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notes:['Remove the DAPI-positive dust from PI image']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
    Select the input image:CropPI
    Name the output image:PILessDust
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedDust
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:16|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notes:['Identify artifacts in the PI channel']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
    Select the input image:PILessDust
    Name the primary objects to be identified:PIDust
    Typical diameter of objects, in pixel units (Min,Max):50,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:17|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notes:['Expand the artifacts slightly']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
    Select the input objects:PIDust
    Name the output objects:ExpandedPIDust
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskImage:[module_num:18|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notes:['Remove the PI artifacts from the previously corrected PI image']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
    Select the input image:PILessDust
    Name the output image:PIDoublyCorrected
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedPIDust
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:19|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notes:['Identify DAPI-labeled nuclei']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
    Select the input image:DAPILessDust
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:20|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notes:['Identify dead cells using PI']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
    Select the input image:PIDoublyCorrected
    Name the primary objects to be identified:DeadNuclei
    Typical diameter of objects, in pixel units (Min,Max):4,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.11,1.0
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    Log transform before thresholding?:No
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
GrayToColor:[module_num:21|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notes:['Make an overlay image of the DAPI and PI']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enabled:False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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:2
    Image name:DAPILessDust
    Color:#00FFFF
    Weight:1.0
    Image name:PIDoublyCorrected
    Color:#FF00FF
    Weight:1.0

RescaleIntensity:[module_num:22|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
    Select the input image:CropDAPI
    Name the output image:RescaleDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleDAPI
    Name the output image:OverlayDAPI
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:Nuclei

RescaleIntensity:[module_num:24|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
    Select the input image:CropPI
    Name the output image:RescalePI
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescalePI
    Name the output image:OverlayPI
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FD8008
    Select objects to display:DeadNuclei

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:PIDoublyCorrected
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:OverlayDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:OverlayPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_dead
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
